PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'run': '1'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = -1.0000, -1.0000, -1.0000
  expName = mindvoice-exp
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    CodeComponent code_init
      Code Type = Py
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        import socket

        marker_info = StreamInfo('MarkerStream', 'Markers',
                                 1, 0, 'string', 'myuid8342')

        marker_outlet = StreamOutlet(marker_info)
        started_recording = False
        s = socket.create_connection(("localhost", 22345))
      Begin Experiment:
        import random

        #random.seed(50)
        participant_id = expInfo['participant']
        session_num = expInfo['session']
        run = expInfo['run']
        task = 'words'

        config_str = f'filename {{template:sub-%p/sub-%p_task-%b_run-%r.xdf}} {{run:{run}}} {{participant:{participant_id}}} {{task:{task}}}\n'
        print(config_str)

        s.sendall(b"update\n")
        s.sendall(b"select all\n")
        s.sendall(config_str.encode('utf-8'))
        s.sendall(b"start\n")
        started_recording = True

        # constants
        REST_DURATION = 2.0
        STIMULI_DURATION = 2.0
        IMAGINE_DURATION = 3.0
        SPEAK_DURATION = 3.0
        NUM_TRIALS = 1

        input_file = open('stimuli_words.txt')
        words = [x.strip() for x in input_file]
        words = words * NUM_TRIALS
        random.shuffle(words)
        word_idx = 0
        N_REPS = 1
        N_REPS = NUM_TRIALS * len(words)
        action_progress = 1
      End Experiment:
        if started_recording:
            s.sendall(b"stop\n")
            started_recording = False
    TextComponent textWelcomeScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment, you will silently imagine and verbally articulate words displayed on the screen. The word will be displayed first, then you will have to imagine the word and finally speak it out loud as instructed on the screen.

        Press the space key to start the experiment.
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
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    CodeComponent code_rest
      Code Type = Py
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      Begin Routine:
        marker_outlet.push_sample(["rest"])
        if word_idx < len(words)-1:
            word_idx+=1
        else:
            word_idx = 0
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine end
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        if started_recording:
            s.sendall(b"stop\n")
            started_recording = False
  Routine stimulus
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        marker_outlet.push_sample(['stim'])
        stimulus_val = words[word_idx]
    TextComponent text_stimulus
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $stimulus_val
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  Routine imagine
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample([f"I-{words[word_idx]}"])
        imagine_val = f"Imagine\n({words[word_idx]})"
        action_progress = 1
      Each Frame:
        action_progress = 1 - (t / IMAGINE_DURATION)  # Calculate progress from 1 to 0 over the duration
        if action_progress < 0:
            action_progress = 0  # Ensure progress does not go below 0
    TextComponent textImagine
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $imagine_val
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    ProgressComponent prog_imagine
      anchor = bottom-center
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (0, -0.25)
      progress [set every frame] = action_progress
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = height
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  Routine speak
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample([f'S-{words[word_idx]}'])
        speak_val = f"Speak\n({words[word_idx]})"
        action_progress = 1
      Each Frame:
        action_progress = 1 - (t / SPEAK_DURATION)  # Calculate progress from 1 to 0 over the duration
        if action_progress < 0:
            action_progress = 0  # Ensure progress does not go below 0
    TextComponent text_speak
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $speak_val
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    ProgressComponent prog_speak
      anchor = bottom-center
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (0, -0.25)
      progress [set every frame] = action_progress
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = height
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  Routine action
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        action = item_actions[word_idx][1]
        word = item_actions[word_idx][0]
        action_text = f'{action} the word: {word}'
    TextComponent text_action
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $action_text
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  Routine start_lsl
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = N_REPS
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    Routine rest
    Routine stimulus
    Routine imagine
    Routine speak
  LoopTerminator trials
  Routine end
