PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mindvoice-pt2
  keyboardBackend = ioHub
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Routines
  Routine trial
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  Routine ready
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  Routine imagine
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You wished to know all about my grandfather. Well, he is nearly ninety-three years old. He dresses himself in an ancient black frock coat, usually minus several buttons; yet he still thinks as swiftly as ever. A long, flowing beard clings to his chin, giving those who observe him a pronounced feeling of the utmost respect. When he speaks his voice is just a bit cracked and quivers a trifle. Twice each day he plays skillfully and with zest upon our small organ. Except in the winter when the ooze or snow or ice prevents, he slowly takes a short walk in the open air each day. We have often urged him to walk more and smoke less, but he always answers, “Banana Oil!” Grandfather likes to be modern in his language
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine read
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  Routine break_2
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  Routine pause
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  Routine rest
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  Routine sentence
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Flow
  Routine trial
  Routine ready
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator num_sentances loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine sentence
    LoopTerminator num_sentances
    Routine rest
  LoopTerminator trials
